
load_file("stdlib.hoc")
load_file("ObliquePath.hoc")

objref cvode
cvode = new CVode()
cvode.active(0)


create axon[2]
objref SD, AXON, SA, Basal, Trunk, AIS, Trial
objref LM, RAD, RADt, LUC, PSA, PSB, ORI
create soma[1], apical[1], basal[1]
objref pl[150], opl[150]

objref netlist, s, ampasyn, f1, DEND, sapamp, somavec, sampvec
strdef  str2



dt = 0.025
tstop = 1650// 1050 //1sec (first 50ms not counted)
steps_per_ms=40

Rm_soma=80000
Rm_end=400
Rm_dend = Rm_soma
Rm_axon = Rm_soma
rm_xhalf = 225
rm_slope = 30


/*Rm_soma=155000
 Rm_end=95000
 Rm_dend = Rm_soma
 Rm_axon = Rm_soma
 */

Ra_soma=150
Ra_end=150
Ra_axon = Ra_soma
Ra_xhalf = 210
Ra_slope = 50


c_m       = 1
cmsoma    = c_m
cmdend    = c_m*1.8
cmaxon    = c_m

Vrest = -65
v_init = -65
celsius = 34.0




// uncomment/call find_epsp_amplitudes whenever u change any of the following parameters ..

//gna=0.008//0.005//0.005//0.0066//0.0033
//gkdr =0.006// 0.00167//0.000267//0.00167//0.058

gna=0.02
gkdr=0.0014
//gna=0
//gkdr=0

gexFac = 0.9

AISFactor=5
epsp_amp = 0.0025  //mV



objref ampa_filename
ampa_filename = new String()
gh=85e-06//µS set to the value for which you'll be running withH.hoc 
ghmax=20  //35  //40  //50  //60  //95
xhalf=250  //350  //250  //350
slopegrad=50//5

//sprint(ampa_filename.s,"g_dist_withghFast85_epspAmp_%f_calculated.txt",epsp_amp)
//sprint(ampa_filename.s,"g_dist_withgh85_epspAmp_%f_calculated.txt",epsp_amp)
sprint(ampa_filename.s,"g_dist_withgh0_epspAmp_%f_calculated.txt",epsp_amp)



/********************************************************************/


Ek = -90
Ena = 55
Eh = -30


/********************************************************************/
//radial distance calculation

somax=2.497
somay=-13.006
somaz=11.12
double distances[200]

func raddist() {
	distn0=distance(0)
	distances[0]=0
	sum=0
    
	for i=1,n3d()-1 {
		xx=(x3d(i)-x3d(i-1))*(x3d(i)-x3d(i-1))
		yy=(y3d(i)-y3d(i-1))*(y3d(i)-y3d(i-1))
		zz=(z3d(i)-z3d(i-1))*(z3d(i)-z3d(i-1))
		sum=sum+sqrt(xx+yy+zz)
		distances[i]=sum
	}
    
	xval=$1
    
    // Amoung the various pt3d's find which one matches the distance of
    //  x closely
    
	distn=distance(xval)
	match=distn-distn0
	matchptdist=100000
	for i=0,n3d()-1 {		
		matptdist=(match-distances[i])*(match-distances[i])
		if(matchptdist>matptdist){
			matchptdist=matptdist
			matchi=i
		}
	}
    
	//print "Match for ", x, " is ", matchi, " XDIST ", match, " MATCH ", distances[matchi], " ERROR ", sqrt(matchptdist)
    
    
    // Find the distance of the closely matched point to the somatic
    // centroid and use that as the distance for this BPAP measurement			
    
	xx=(x3d(matchi)-somax)*(x3d(matchi)-somax)
	yy=(y3d(matchi)-somay)*(y3d(matchi)-somay)
	zz=(z3d(matchi)-somaz)*(z3d(matchi)-somaz)
	return sqrt(xx+yy+zz)
}

/********************************************************************/

proc update_init(){
	finitialize(v_init)
	fcurrent()
    forall {
        for (x){
            if (ismembrane("hd")||ismembrane("nas")||ismembrane("na3")||ismembrane("nax")) {
                e_pas(x)=v(x)+(i_hd(x)+ina(x)+ik(x))/g_pas(x)
            } else {
                e_pas(x)=v(x)
            }
        }
    }
}
/********************************************************************/

/**********************************************************************/
// Passive Conductances 

proc setpassive(){
    forall {
        insert pas
        e_pas = v_init
        Ra=Ra_soma
    }
    forsec SD{		// For somato-dendritic compartments
        cm=cmdend
        g_pas=1/Rm_dend
    }
    forsec "soma" {
        cm = cmsoma 
        g_pas=1/Rm_soma
    }
    forsec Trunk {
        for (x) {
            rdist=raddist(x)
            rm = Rm_soma + (Rm_end - Rm_soma)/(1.0 + exp((rm_xhalf-rdist)/rm_slope))
            //rm = Rm_soma + (Rm_end - Rm_soma)/(1.0 + exp((400-rdist)/50))
            Ra = Ra_soma + (Ra_end - Ra_soma)/(1.0 + exp((Ra_xhalf-rdist)/Ra_slope))
            g_pas(x)=1/rm
        }
    }	
    
    for i=0,plcount {
        seccount=0
        forsec pl[i] {
            if(!seccount){
                trunk_pas=g_pas(1)
                seccount=seccount+1
            } else {
                g_pas=trunk_pas
                seccount=seccount+1
            }
            //print secname() 
        }
    }       
    
}
/**********************************************************************/
// Active Conductances 



proc setactive () {
    
	forall{
        insert na3
        gbar_na3= gna 
        insert kdr 
        gkdrbar_kdr=gkdr
        
        
        insert hd  
		ghdbar_hd=gh vhalfl_hd=-82
        tfactor_hd=1
	}
    
	forsec AXON{
        gbar_na3= 0 
        gkdrbar_kdr=0
        ghdbar_hd=0
        
    }
    
    
    forsec "apical"{
        insert nas
        gbar_nas = gna //has a slow "s" factor
        
        gbar_na3 = 0 //since this was added forall, remove from apical section
        
    }
    
    forsec AIS {
        gbar_na3= 0 
        insert nax 
        gbar_nax = gna*AISFactor//0//10          //5             //50
        
        gkdrbar_kdr=gkdr
        ghdbar_hd=0
	}
    
    forall{
        if(ismembrane("hd")){
            ehd_hd=-30
        }
        
        if(ismembrane("na3") || ismembrane("nas") || ismembrane("nax")){
            ena=55
        }
        
        if(ismembrane("kdr")){
            ek=-90
        }
        
        
        
    }
    
    
	
}


/********************************************************************/
proc gh_gradient(){
	
	
	forsec Trunk {	// Trunk
        
		for (x) {
			xdist=raddist(x)
			
			// ghdbar_hd(x) = gh*(1+95/(1+exp(-(xdist-350)/5.0))) //works 
            //ghdbar_hd(x) = gh*(1+20/(1+exp(-(xdist-330)/75))) //transfer resonance
            ghdbar_hd(x) = gh*(1+ghmax/(1+exp(-(xdist-xhalf)/slopegrad)))
            
            
			if (xdist > 100){
				if (xdist>300) { 
					ndist=300
				} else { // 100 <= xdist <= 300
					ndist=xdist
				}
				vhalfl_hd(x)=-82-8*(ndist-100)/200
			} else {	// xdist < 100
				vhalfl_hd(x)=-82
			}	
            
		}
	}
    
	for i=0,plcount { // Apical obliques
    	seccount=0
    	forsec pl[i] {
        	if(!seccount){	// The first section is the trunk
            	trunk_h=ghdbar_hd(1)
				trunk_vhalf=vhalfl_hd(1)
				seccount=seccount+1
        	} else {
				
            	ghdbar_hd=trunk_h
				vhalfl_hd=trunk_vhalf
				seccount=seccount+1
        	}
        	//print secname() 
    	}
	}       
    
	forsec "soma" {
        ghdbar_hd=gh vhalfl_hd=-82
	}	
    
	forsec Basal {
        ghdbar_hd=gh vhalfl_hd=-82
	}	
    
	forall if (ismembrane("hd") ) ehd_hd = Eh
        
        
        
        
        }


/**********************************************************************/
proc load_3dcell() {
    
    // $s1 filename
    
	forall delete_section()
	xopen($s1)
    
	access soma[2] //define origin for distance calculation
	distance()
    
    
	SD = new SectionList() //Somato-dendritic section
	SA = new SectionList() // Somato-axonic section
	Trunk = new SectionList() //Trunk
	Basal = new SectionList() //Basal
    Trial = new SectionList()
    
	forsec "soma" {
		SD.append()
		SA.append()
	}
    
	forsec "basal" { 
		SD.append()
		Basal.append()
	}
    
	forsec "apical"{
		SD.append()
		SA.append()
	}
    
	// Trunk. 
    
	soma[0]	   Trunk.append()
	apical[0]  Trunk.append() 
	apical[4]  Trunk.append() 
	apical[6]  Trunk.append() 
	apical[14] Trunk.append() 
	apical[15] Trunk.append() 
	apical[16] Trunk.append() 
	apical[22] Trunk.append() 
	apical[23] Trunk.append() 
	apical[25] Trunk.append() 
	apical[26] Trunk.append() 
	apical[27] Trunk.append() 
	apical[41] Trunk.append() 
	apical[42] Trunk.append() 
	apical[46] Trunk.append() 
	apical[48] Trunk.append() 
	apical[56] Trunk.append() 
	apical[58] Trunk.append() 
	apical[60] Trunk.append() 
	apical[62] Trunk.append() 
	apical[64] Trunk.append() 
	apical[65] Trunk.append() 
	apical[69] Trunk.append() 
	apical[71] Trunk.append()
	apical[81] Trunk.append() 
	apical[83] Trunk.append() 
	apical[95] Trunk.append()
	apical[103] Trunk.append()
	apical[104] Trunk.append()
    
    
    soma[0] Trial.append()
	apical[58] Trial.append() // 196 µm
	apical[64] Trial.append() // 242 µm
	apical[69] Trial.append() // 300 µm
	apical[103] Trial.append() // 420 µm
    
    load_file("oblique-paths.hoc")
    
    setpassive() //before setting the nseg
    // The lambda constraint
    totcomp=0
    forall{
        nseg=int((L/(0.1*lambda_f(100))+0.9)/2)*2+1   
        totcomp=totcomp+nseg
    }
    print "totcomp = ",totcomp
    
    
    
	init_cell() //calls setpassive()
    
    DEND = new SectionList()
    forsec "apical"{
        xdist=raddist(1)
        if(xdist<300 && xdist > 50){
            DEND.append()
        }    
    }
    
    
    
	
}

/**********************************************************************/
// For cell number n123 on the DSArchive, converted with CVAPP to give
// HOC file, the following definition holds. This is the same as Poirazi et
// al. have used in Neuron, 2003. The argument is that the subtree seems
// so long to be a dendrite, and the cell does not have a specific axon.
// There is a catch, though, if the morphology is closely scanned, then 
// basal dendrites would branch from these axonal segments - which
// may be fine given the amount of ambiguity one has while tracing! 

proc addaxon() {
    
	AXON = new SectionList()
    AIS = new SectionList() // Axonal initial segment
    
	for i = 30,34 basal[i] {
		AXON.append()
		Basal.remove()
	}
    
	for i = 18,22 basal[i] {
		AXON.append()
        AIS.append()
		Basal.remove()
	}
    
	forsec AXON {
		e_pas=v_init 
		g_pas = 1/Rm_axon 
		Ra=Ra_axon 
		cm=cmaxon
	}
}

/********************************************************************/





proc init_cell() {
	setpassive()
	addaxon()
	setactive()
	gh_gradient() //sets the gh gradient
	
	access soma[2]	// Reinitializing distance origin
	distance()
    
	finitialize(v_init)
	fcurrent()
    forall {
        for (x) {
            if (ismembrane("hd")||ismembrane("nas")||ismembrane("na3")||ismembrane("nax")) {
                e_pas(x)=v(x)+(i_hd(x)+ina(x)+ik(x))/g_pas(x)
            } else {
                e_pas(x)=v(x)
            }
        }
    }   
}


/********************************************************************/


load_3dcell("n123.hoc") //calls setpassive()


/////********************************************************************/
objref recordingSections

recordingSections = new SectionList()

basal[32] recordingSections.append()
basal[12] recordingSections.append()
soma[0] recordingSections.append()
apical[25] recordingSections.append()
apical[60] recordingSections.append()
apical[65] recordingSections.append()
apical[71] recordingSections.append()
apical[95] recordingSections.append()

objref apc[8], spikeTimes[8] // will be used to record spike times in recordingSections
objref fname, file_obj //used for giving file names and writing to a file respectively

fname = new String()
file_obj =  new File()

recLocCount=0

forsec recordingSections{
    for(x){
        if(x==0.5){
            spikeTimes[recLocCount] = new Vector()
            apc[recLocCount] = new APCount(x)
            apc[recLocCount].thresh = -10  //threshold for spikes is -10mV
            apc[recLocCount].record(spikeTimes[recLocCount])
            print recLocCount
            recLocCount+=1
            
        } //end of if(x==0.5)
        
    } //end of for(x)     
} //end of forsec recordingSections

/********************************************************************/


objref tvec,f_tvec,f_name_tvec // time vector , time file, time file name
objref cvec,f_cvec, f_name_cvec // soma(0.5) voltage vector, file , file name
objref cvec42, cvec62, cvec69 // apical[42], apical[62], apical[69]
cvec=new Vector()
cvec42=new Vector()
cvec62=new Vector()
cvec69=new Vector()
tvec=new Vector()
f_tvec = new File()
f_cvec = new File()
f_name_cvec= new String()
f_name_tvec = new String()


/********************************************************************/

numexsyn =50// 100//221//100//221//100//221 //100 //number of excitatory synapses
numinsyn = 25 //number of inhibitory synapses

use_mcell_ran4(1)

//highindex = 8 //use the same highindex for all trials for distribution of inhibitory synapses 
trialNo = 1

highindex = trialNo + 1e8*mcell_ran4(&trialNo) //seed for synaptic distribution


objref r
r = new Random(highindex) // will be of type discunif() to generate comaparment #s where the excitatory synapses will go
//r = new Random()

no_of_comp=totcomp // total number fo compartments
//
///********************************************************************/

objref isExSynapse, isInSynapse, isSynapse  //vectors to store synapse location; 1 for synapse, 0 for not
objref f_isSynapse,f_isExSynapse, f_isInSynapse // file objects for saving synapse location vectors
objref f_name_isSynapse, f_name_isExSynapse,f_name_isInSynapse // names -string objects for synpase location file names

objref i_total[no_of_comp], f_total_current,f_name_total //total current vector, file and file name
objref i_queer_current[no_of_comp],f_queer_current, f_name_queer // h current vector, file and file name
/*
 objref i_pas_current[no_of_comp],f_pas_current, f_name_pas // passive current vector, file and file name
 objref i_cap_current[no_of_comp],f_cap_current, f_name_cap // capacitive current vector, file and file name
 
 objref i_sodium_current[no_of_comp],f_sodium_current, f_name_sodium // Na current vector, file and file name
 objref i_potassium_current[no_of_comp],f_potassium_current, f_name_potassium // K current vector, file and file name
 */

objref esyncurr[numexsyn+1], f_esyncurr, f_name_esyncurr // excitatory synaptic current vectot, file and file name; last index stores total ex syn current
objref isyncurr[numinsyn+1], f_isyncurr, f_name_isyncurr // inhibitory synaptic current vector, file and file name; last index stores total in syn current

objref f_e_time, f_name_etime, e_time[numexsyn+1] // excitatory synaptic timings - to check whether their histogram looks gaussian modulated or not; last index used for all ex syn times 
objref f_i_time, f_name_itime, i_time[numinsyn+1] // inhibitory synaptic timings - to check whether their histogram looks random (uniform) or not; last index used for all in syn times
objref ex_syn_locations //contains compartment indices where excitatory synapses are present
objref in_syn_locations //contains compartment indices where inhibitory synapses are present


isExSynapse= new Vector(no_of_comp)
isInSynapse= new Vector(no_of_comp)
isSynapse = new Vector(no_of_comp)
ex_syn_locations = new Vector(numexsyn)
in_syn_locations = new Vector(numinsyn)

f_isSynapse = new File()
f_isExSynapse = new File()
f_isInSynapse = new File()
f_total_current = new File()
f_queer_current = new File()
f_esyncurr = new File()
f_isyncurr = new File()
f_e_time= new File()
f_i_time= new File()
/*f_pas_current = new File()
 f_cap_current = new File()
 f_sodium_current = new File()
 f_potassium_current = new File()
 */

f_name_isSynapse = new String()
f_name_isExSynapse= new String()
f_name_isInSynapse= new String()
f_name_total = new String()
f_name_queer = new String()
/*
 f_name_pas = new String()
 f_name_cap = new String()
 f_name_sodium = new String()
 f_name_potassium = new String()
 */
f_name_esyncurr = new String()
f_name_isyncurr = new String()   
f_name_etime= new String()
f_name_itime= new String()

for(i=0;i<no_of_comp;i+=1){
    i_total[i]=new Vector() //total current
    i_queer_current[i] = new Vector() //queer current
    /*
     i_pas_current[i] = new Vector() //passive current
     i_cap_current[i] = new Vector() //capacitive current
     
     i_sodium_current[i] = new Vector() //sodium current
     i_potassium_current[i] = new Vector() //potassium current
     */
}

for(i=0;i<=numexsyn;i+=1){
    e_time[i]= new Vector()
    esyncurr[i] = new Vector() // excitatory synaptic current vector
    
}

for(i=0;i<=numinsyn;i+=1){
    i_time[i]= new Vector()
    isyncurr[i] = new Vector() // inhibitory synaptic curren vector 
    
}

/********************************************************************/

//objects to be used with NetCon
objref nile  
objref conne[numexsyn]

objref nili
objref conni[numinsyn]

/********************************************************************/

cvec.record(&soma[2].v(0.5)) // save the voltage at the soma
cvec42.record(&apical[42].v(0.5)) // save the voltage at the apical[42] raddist(1)=158.16
cvec62.record(&apical[62].v(0.5)) // save the voltage at the apical[62] raddist(1)=235.56799 
cvec69.record(&apical[69].v(0.5)) // save the voltage at the apical[69] raddist(1)=303.59043

//v_soma.record(&soma[2].v(0.5))

/********************************************************************/

objref ex_synapse_compartment_index //will store the index of the excitatory synaptic input


/********************************************************************/


//add synapses

//gex = 0.0008 //excitatory synaptic conductance  µS
objref syne[numexsyn] // excitatory synapses - will be of type Exp2Syn()
Ecount=0 //counter for ex synpases 

segcount=0

gin=0.0001 // µS - to balance the excitation - (as the number of inhibitory synapses is less) increase the inhibitory synaptic conductance ???

objref syni[numinsyn] //inhibitory synapses - will be of type Exp2Syn()
Icount=0 //counter for in synapses

count = 0 //keeps track of apical section compartment index
count_dend = 0// should be same as count 
exsegcount=0 //indexes only the apical sections matching a certain criteria

/*forsec "apical"{
 for(x){
 xdist = raddist(1) 
 if(xdist>50 && xdist<300){
 if(x!=0 && x!=1){
 xdist = raddist(x) //get the radial distance from the soma
 print "using apical ", xdist
 count = count + 1
 }
 }
 }
 }
 */
forsec DEND{
    for (x) {
        if (x!=0 && x!=1){
            xdist = raddist(x)
            //  print "using DEND ", xdist
            count_dend= count_dend + 1 
        }
    }
}

//print "count of apical >50 <300 : ", count
print "count of apical >50 <300 using DEND sectionlist: ", count_dend

r.discunif(0,count_dend-1) //set to generate compartment #s from 0 to count

ex_synapse_compartment_index = new Vector(count_dend) 

for(e_syn_count=0; e_syn_count < numexsyn; e_syn_count = e_syn_count+1){  
    
    ind=r.repick()
    while(ex_synapse_compartment_index.x[ind]!=0){
        ind=r.repick()  //keep repicking till you find a compartment which doesn't already have a synapse
    }
    ex_synapse_compartment_index.x[ind] = 1 //generate a uniformly distributed random number between 0 and count and use this to assign the ex synapse in that compartment
    
}




forall{
    for(x){
        if(x!=0 && x!=1){
            xdist = raddist(x) //get the radial distance from the soma
            
            if(xdist<100){ //add inhibitory synapses at distance<100µm from soma
                
                
                if(mcell_ran4(&highindex)>0.50 && Icount<numinsyn){ //if prob>0.5 and # of inh syn<total #of inhi synapses, then add an inhibitory synapse
                    syni[Icount] = new Exp2Syn(x)
                    syni[Icount].tau1 = 0.1
                    syni[Icount].tau2 = 5
                    syni[Icount].e = -80
                    in_syn_locations.x[Icount]=segcount
                    Icount+=1
                    isInSynapse.x[segcount]=1
                    isSynapse.x[segcount]=1
                } else{ 
                    isInSynapse.x[segcount]=0 
                    isSynapse.x[segcount]=0
                }
                
            } //end of if xdist<100
            
            
            
            //            if(xdist>50 && xdist<300){ //distance>50µm && distance <300µm from soma
            
            ifsec DEND {
                
                if(ex_synapse_compartment_index.x[exsegcount]==1){ //if this compartment was chosen earlier using repick(), add an excitatory synapse
                    // print "xdist ",xdist
                    syne[Ecount] = new Exp2Syn(x)
                    syne[Ecount].tau1 = 0.1
                    syne[Ecount].tau2 = 5
                    syne[Ecount].e = 0
                    ex_syn_locations.x[Ecount]=segcount
                    Ecount+=1
                    isExSynapse.x[segcount]=1
                    isSynapse.x[segcount]=1
                } else{ 
                    isExSynapse.x[segcount]=0 
                    isSynapse.x[segcount]=0
                }
                exsegcount = exsegcount +1
            } // end of ifsec  ...
            
            
            
            segcount+=1
        }
    }
}


print "segcount = ", segcount
print "exsegcount = ", exsegcount

print "No of excitatory synapses",Ecount

print "No of inhibitory synapses",Icount

/**************************************************************/


seg=0
Ecount=0
Icount=0

objref g_ampa,f1

g_ampa= new Vector(220)

f1=new File()
f1.ropen(ampa_filename.s)
g_ampa.scanf(f1) //reading into vector
f1.close()

wopen("synapse_location_with_conductance.txt")

within50to300count=0

forall{
    for(x){
        if(x!=0 && x!=1){
            
            xdist = raddist(x)
            ifsec DEND {
                
                if(isExSynapse.x[seg]==1){
                    gex=g_ampa.x[within50to300count]/gexFac
                    
                    
                    //  print within50to300count+1, " ", gex
                    conne[Ecount] = new NetCon(nile,syne[Ecount],0,0,gex) //(src, target, threshold, delay, wt)
                    Ecount+=1
                    //  print "gex = ", gex
                    fprint("%f\t%f\n",xdist,gex)
                }
                
                within50to300count= within50to300count + 1
            }
            
            if(isInSynapse.x[seg]==1){
                //gin=gex*3
                conni[Icount] = new NetCon(nili,syni[Icount],0,0,gin) //(src, target, threshold, delay, wt)
                Icount+=1
            }
            
            seg+=1
        }
    }
}

wopen()

///**************************************************************/
//

use_mcell_ran4(1)
junk = area(0.5) // need to call area(0.5) once coz ofsome bug in the way area is calculated


/**************************************************************/
//for(trialNo=1;trialNo<51;trialNo+=1){ //if you're using this for loop.. ensure that highindex gets changed inside the loop for each trial

//highindex = trialNo // this highindex is used for initialization of mcell_ran4() for synapse activation timing calculation
print highindex

trialNo = trialNo -1 //mcell_ran4 increases it by one, so decrease by one to get back


print "Trial number: ", trialNo 



sprint(f_name_isSynapse.s,"Trial_hNaKdr_%d/hWithBaseline_isSynapse.txt",trialNo)
sprint(f_name_isExSynapse.s,"Trial_hNaKdr_%d/hWithBaseline_isExSynapse.txt",trialNo)
sprint(f_name_isInSynapse.s,"Trial_hNaKdr_%d/hWithBaseline_isInSynapse.txt",trialNo)



f_isSynapse.wopen(f_name_isSynapse.s)
isSynapse.printf(f_isSynapse)
f_isSynapse.close()

f_isExSynapse.wopen(f_name_isExSynapse.s)
isExSynapse.printf(f_isExSynapse)
f_isExSynapse.close()

f_isInSynapse.wopen(f_name_isInSynapse.s)
isInSynapse.printf(f_isInSynapse)
f_isInSynapse.close()

//
///********************************************************************/
//
//
syncurrcount = 0

finitialize(Vrest)
fcurrent()
forall {
    for (x) {
        if (ismembrane("hd")||ismembrane("nas")||ismembrane("na3")||ismembrane("nax")) {
            e_pas(x)=v(x)+(i_hd(x)+ina(x)+ik(x))/g_pas(x)
        } else {
            e_pas(x)=v(x)
            
        }
    }
}



// finitialize(Vrest)
// fcurrent()


/**************************************************************/


//load_file ("nrngui.hoc")
//nrncontrolmenu()
//newPlotV()


//objectvar g
//g = new Graph()
//g.size(0,1050, -80,40)
//
//g.addexpr("soma[2].v(0.5)")
//g.addexpr("apical[69].v(0.5)",2,1)
//g.addexpr("apical[62].v(0.5)",3,1)
//g.addexpr("apical[42].v(0.5)",5,1)

proc finalfunc() {


OscFreq = 8 ///////in Hz, frequency of modulation of mean synaptic activation rate
sigma_ex=1000/(8*OscFreq) //std for gaussian distribution
sigma_in=1000/(5*OscFreq) //std for gaussian distribution
mod_factor=1000/OscFreq //used in rate_ex, duration of 1 cycle in ms
mean= mod_factor/2 //used in rate_ex, as the mean to be subtracted for gaussian distri under the mod usage
phi=PI/3//PI //phase difference in radians (for interneurons)
phase=mod_factor*phi/(2*PI) //phaase difference in ms

//g.erase()
//g.begin()
//
//ttte=0
while (t<tstop) {
    
      	
    if (t >= 50) {
        
        rate_ex = exp(-(((t%mod_factor)-mean)^2)/(2*(sigma_ex^2))) ///////sets mean activation rate for excitatory synapses 
        for i=0,numexsyn-1 {
            if (dt*rate_ex > mcell_ran4(&highindex) ) {
                e_time[i].append(t)
                e_time[Ecount].append(t)
                conne[i].event(t)
            }
            esyncurr[i].append(syne[i].i)
            esyncurrcount = esyncurrcount + syne[i].i
            
        }
        
        esyncurr[i].append(esyncurrcount) //last index.. save total ex synaptic current
        esyncurrcount = 0
        
        //  rate_in= 0.5 //mean activation rate for inhibitory synapses
        rate_in = exp(-((((t+phase)%mod_factor)-mean)^2)/(2*(sigma_in^2)))
        // rate_in = exp(-((((t+phase)%mod_factor)-mean)^2)/(2*(sigma_in^2)))
        
        // rate_in = exp(-((((t-31)%125)-62)^2)/(2*(sigma^2)))///sets mean activation rate for inhibitory synapses 
        //31 subtracted for 90deg phase shift
        
        for i=0,numinsyn-1 {
            if (dt*rate_in > mcell_ran4(&highindex)) {
                i_time[i].append(t)
                i_time[Icount].append(t)
                conni[i].event(t)
            }
            isyncurr[i].append(syni[i].i)
            isyncurrcount = isyncurrcount + syni[i].i
        }
        
        isyncurr[i].append(isyncurrcount)
        isyncurrcount = 0
        
    } // end of if(t>=50)
    
    seg=0
    ecount=0
    icount=0
    segcount=0
    
       fadvance()

}

}

finalfunc()


/*****************************************************************/
//write to files
//define all file names according to current trial

for(i=0;i<recLocCount;i+=1){
    
    sprint(fname.s,"Trial_hNaKdr_%d/SpikeTimes_withH_v%d.txt",trialNo,(i+1))
    file_obj.wopen(fname.s)
    spikeTimes[i].printf(file_obj)
    file_obj.close()
    
    
}


sprint(f_name_cvec.s,"Trial_hNaKdr_%d/h_cvec.txt",trialNo)
f_cvec.wopen(f_name_cvec.s)
cvec.printf(f_cvec)
f_cvec.close()
cvec.resize(0) //resize for next trail - needed if using the for loop for running several trials

sprint(f_name_cvec.s,"Trial_hNaKdr_%d/h_cvec42.txt",trialNo)
f_cvec.wopen(f_name_cvec.s)
cvec42.printf(f_cvec)
f_cvec.close()
cvec42.resize(0) //resize for next trail - needed if using the for loop for running several trials


sprint(f_name_cvec.s,"Trial_hNaKdr_%d/h_cvec62.txt",trialNo)
f_cvec.wopen(f_name_cvec.s)
cvec62.printf(f_cvec)
f_cvec.close()
cvec62.resize(0) //resize for next trail - needed if using the for loop for running several trials


sprint(f_name_cvec.s,"Trial_hNaKdr_%d/h_cvec69.txt",trialNo)
f_cvec.wopen(f_name_cvec.s)
cvec69.printf(f_cvec)
f_cvec.close()
cvec69.resize(0) //resize for next trail - needed if using the for loop for running several trials




